PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[1.0,1.0,1.0]
  expName = InfinityThesisTest5
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Routines
  Routine trial
    PolygonComponent fixcross
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.5
      text [set every repeat] = $Statement
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    KeyboardComponent key_resp
      allowedKeys = 'e','i'
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    SoundComponent Timer
      sound = A
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 0.2
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  Routine Instructions
    TextComponent Instr
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      units = height
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      text:
        You will be shown a total of 160 statements pertaining to mathematics, science, and social concepts. Your task is to determine whether each statement is true or false as quickly as possible without sacrificing accuracy. Some statements will be difficult and some will be easier.  We do not expect you to know the correct answer for all 160 statements.

        Each statement will appear on your screen for 5 seconds and you will have those 5 seconds to decide if it is true or false before the next statement appears. There will be a timer on your screen and a reminder when you have 2 seconds remaining. If you do not respond, that answer will be considered incorrect and the task will move on to the next statement.

        If the statement is true, you will press the “E” key on your keyboard with your left pointer finger; if the statement is false, you will press the “I” key on your keyboard with your right pointer finger.
    KeyboardComponent EndInstr
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = InfinityThesisTest5.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Statement': 'A minute is infinite', 'Correct': 'i'},
      {'Statement': 'Space has an end', 'Correct': 'i'},
      {'Statement': 'Time  goes on forever', 'Correct': 'e'},
      {'Statement': 'Numbers are finite', 'Correct': 'i'},
      {'Statement': 'An inch cannot go on forever', 'Correct': 'e'}]
    Routine trial
  LoopTerminator trials
